PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['faces/HAF1.bmp', 'faces/HAF8.bmp', 'faces/HAF42.bmp', 'faces/HAF59.bmp', 'faces/HAF70.bmp', 'faces/HAF82.bmp', 'faces/HAF86.bmp', 'faces/HAF94.bmp', 'faces/HAF99.bmp', 'faces/HAF101.bmp', 'faces/HAF102.bmp', 'faces/HAF103.bmp', 'faces/HAF107.bmp', 'faces/HAF110.bmp', 'faces/HAF115.bmp', 'faces/HAF118.bmp', 'faces/HAF122.bmp', 'faces/HAM1.bmp', 'faces/HAM2.bmp', 'faces/HAM5.bmp', 'faces/HAM9.bmp', 'faces/HAM10.bmp', 'faces/HAM17.bmp', 'faces/HAM38.bmp', 'faces/HAM39.bmp', 'faces/HAM49.bmp', 'faces/HAM50.bmp', 'faces/HAM78.bmp', 'faces/HAM89.bmp', 'faces/HAM95.bmp', 'faces/HAM98.bmp', 'faces/HAM112.bmp', 'faces/HAM114.bmp', 'faces/NEF6.bmp', 'faces/NEF8.bmp', 'faces/NEF9.bmp', 'faces/NEF15.bmp', 'faces/NEF35.bmp', 'faces/NEF36.bmp', 'faces/NEF45.bmp', 'faces/NEF60.bmp', 'faces/NEF62.bmp', 'faces/NEF66.bmp', 'faces/NEF83.bmp', 'faces/NEF99.bmp', 'faces/NEF107.bmp', 'faces/NEM4.bmp', 'faces/NEM5.bmp', 'faces/NEM6.bmp', 'faces/NEM8.bmp', 'faces/NEM11.bmp', 'faces/NEM14.bmp', 'faces/NEM15.bmp', 'faces/NEM29.bmp', 'faces/NEM37.bmp', 'faces/NEM40.bmp', 'faces/NEM59.bmp', 'faces/NEM76.bmp', 'faces/NEM95.bmp', 'faces/NEM98.bmp', 'faces/SAF2.bmp', 'faces/SAF3.bmp', 'faces/SAF15.bmp', 'faces/SAF16.bmp', 'faces/SAF20.bmp', 'faces/SAF24.bmp', 'faces/SAF31.bmp', 'faces/SAF32.bmp', 'faces/SAF33.bmp', 'faces/SAF34.bmp', 'faces/SAF48.bmp', 'faces/SAM1.bmp', 'faces/SAM3.bmp', 'faces/SAM5.bmp', 'faces/SAM6.bmp', 'faces/SAM7.bmp', 'faces/SAM9.bmp', 'faces/SAM10.bmp', 'faces/SAM11.bmp', 'faces/SAM12.bmp', 'faces/SAM13.bmp', 'faces/SAM15.bmp', 'faces/SAM29.bmp', 'faces/SAM30.bmp', 'faces/SAM31.bmp']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = TIST
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    ImageComponent image_welcome
      image = stimuli/welcome.png
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text_fixation
      font = Noto Sans SC
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine block_practice
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    ImageComponent image_block_practice
      image [set every repeat] = $stimulus
      size = (0.36, 0.41535)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_block_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine refresh
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    TextComponent text_refresh
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine answer_block_practice
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    TextComponent text_answer_block_practice
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        请按如下顺序输入答案（数字中间无间隔或任何字符）：

        快乐-平静-悲伤
    TextboxComponent textbox_answer_block_practice
      bold = False
      editable = True
      font = Noto Sans SC
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent button_text_block_practice
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 点击这里继续
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    MouseComponent mouse_block_practice
      clickable = button_text_block_practice
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text = ""
      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        allowed_chars = '0123456789'
        text = textbox_answer_block_practice.text
        filtered_text = ''
        for i in range(len(text)):
            if text[i] in allowed_chars:
                filtered_text += text[i]
            if len(filtered_text) >= 3:
                break  # stop after collecting 3 digits
        textbox_answer_block_practice.setText(filtered_text)
      End Routine:
        correct_answer_current = correct_answer
        correct_answer_current = str(correct_answer_current)
        participant_response = textbox_answer_block_practice.text.strip()
        num_correct = sum([1 for i in range(3) if participant_response[i] == correct_answer_current[i]])
        thisExp.addData('num_correct', num_correct)
        feedback_text = f"你答对了{num_correct}种表情的面孔数目。"
        win.mouseVisible = False
  Routine feedback_block_practice
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    TextComponent text_feedback_block_practice
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_text
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    TextComponent text_feedback_note_practice
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = 请按空格键继续
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instruct
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    ImageComponent image_practice_instruct
      image = stimuli/practice_instruct.png
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_practice_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_check
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    ImageComponent image_continue_check
      image = stimuli/continue_check.png
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_continue_check
      allowedKeys = 'space','Q','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_continue_check
      Code Type = Auto->JS
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      Begin Routine:
        loop_practice.finished = False
      End Routine:
        if 'Q' in key_resp_continue_check.keys:
            loop_practice.finished = False
        elif 'space' in key_resp_continue_check.keys:
            loop_practice.finished = True
  Routine primary_task_welcome
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    ImageComponent image_primary_welcome
      image = stimuli/welcome_primary.png
      size = (1.1, 0.825)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_primary_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block
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    ImageComponent image_block
      image [set every repeat] = $stimulus
      size = (0.36, 0.41535)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine answer_block
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    TextComponent text_answer_block
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        请按如下顺序输入答案（数字中间无间隔或任何字符）：

        快乐-平静-悲伤
    TextboxComponent textbox_answer_block
      bold = False
      editable = True
      font = Noto Sans SC
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent button_answer_block
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 点击这里继续
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    MouseComponent mouse_answer_block
      clickable = button_answer_block
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_answer_block
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text_primary = ""
      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        allowed_chars = '0123456789'
        text = textbox_answer_block.text
        filtered_text = ''
        for i in range(len(text)):
            if text[i] in allowed_chars:
                filtered_text += text[i]
            if len(filtered_text) >= 3:
                break  # stop after collecting 3 digits
        textbox_answer_block.setText(filtered_text)
      End Routine:
        correct_answer_primary_current = correct_answer
        correct_answer_primary_current = str(correct_answer_primary_current)
        participant_response = textbox_answer_block.text.strip()
        num_correct = sum([1 for i in range(3) if participant_response[i] == correct_answer_primary_current[i]])
        thisExp.addData('num_correct', num_correct)
        feedback_text_primary = f"你答对了{num_correct}种表情的面孔数目。"
        win.mouseVisible = False
  Routine feedback_block
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    TextComponent text_feedback_block
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_text_primary
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    TextComponent text_feedback_block_note
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = 请按空格键继续
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    KeyboardComponent key_resp_feedback_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_check_block
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    TextComponent text_continue_check_block
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_progress_report
      Code Type = Auto->JS
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      Begin Experiment:
        block_counter = 0
      Begin Routine:
        block_counter += 1

        if block_counter == 6:
            text_continue_check_block.text = "您已经完成了四分之一。"
        elif block_counter == 13:
            text_continue_check_block.text = "您已经完成了一半。"
        elif block_counter == 19:
            text_continue_check_block.text = "您已经完成了四分之三。"
        else:
            text_continue_check_block.text = "如果您觉得累了，可以休息一会儿。"
    TextComponent text_continue_prompt
      font = Noto Sans SC
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = 请按空格键继续。
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    KeyboardComponent key_resp_contiue_check_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent text_goodbye
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        测试结束。

        感谢您参与本测试，祝生活愉快！
    KeyboardComponent key_resp_goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine refresh
  Routine practice_instruct
  Routine refresh
  LoopInitiator loop_practice loopType="TrialHandler"
    conditions = [{'block_practice_file': 'block_practice_1.xlsx', 'correct_answer': 688}]
    conditionsFile = loop_block_practice.xlsx
    loopType = sequential
    nReps = 99
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    Routine fixation
    LoopInitiator loop_block_practice loopType="TrialHandler"
      conditionsFile = $block_practice_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'stimuli_no': 1, 'stimulus': 'HAM1.bmp', 'valence': 'happy', 'sex': 'male', 'switch_condition': 'begin', 'BI_condition': 'nonBI', 'minus1_valence': 'non', 'minus2_valence': 'non', 'switch_type': 'begin', 'BI_type': 'non'},
        {'stimuli_no': 2, 'stimulus': 'NEF6.bmp', 'valence': 'neutral', 'sex': 'female', 'switch_condition': 's', 'BI_condition': 'nonBI', 'minus1_valence': 'happy', 'minus2_valence': 'non', 'switch_type': 'hn', 'BI_type': 'hns1'},
        {'stimuli_no': 3, 'stimulus': 'SAF2.bmp', 'valence': 'sad', 'sex': 'female', 'switch_condition': 's', 'BI_condition': 'control', 'minus1_valence': 'neutral', 'minus2_valence': 'happy', 'switch_type': 'ns', 'BI_type': 'hns'},
        {'stimuli_no': 4, 'stimulus': 'SAF3.bmp', 'valence': 'sad', 'sex': 'female', 'switch_condition': 'ns', 'BI_condition': 'nonBI', 'minus1_valence': 'sad', 'minus2_valence': 'neutral', 'switch_type': 'ss', 'BI_type': 'non'},
        {'stimuli_no': 5, 'stimulus': 'SAM1.bmp', 'valence': 'sad', 'sex': 'male', 'switch_condition': 'ns', 'BI_condition': 'nonBI', 'minus1_valence': 'sad', 'minus2_valence': 'sad', 'switch_type': 'ss', 'BI_type': 'non'},
        {'stimuli_no': 6, 'stimulus': 'NEF9.bmp', 'valence': 'neutral', 'sex': 'female', 'switch_condition': 's', 'BI_condition': 'nonBI', 'minus1_valence': 'sad', 'minus2_valence': 'sad', 'switch_type': 'sn', 'BI_type': 'sns1'}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
      Routine block_practice
      Routine refresh
    LoopTerminator loop_block_practice
    Routine answer_block_practice
    Routine refresh
    Routine feedback_block_practice
    Routine refresh
    Routine continue_check
    Routine refresh
  LoopTerminator loop_practice
  Routine primary_task_welcome
  Routine refresh
  LoopInitiator loop_primary loopType="TrialHandler"
    conditionsFile = loop_block.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_file': 'block_1.xlsx', 'correct_answer': 685},
      {'block_file': 'block_2.xlsx', 'correct_answer': 666},
      {'block_file': 'block_3.xlsx', 'correct_answer': 766},
      {'block_file': 'block_4.xlsx', 'correct_answer': 786},
      {'block_file': 'block_5.xlsx', 'correct_answer': 776},
      {'block_file': 'block_6.xlsx', 'correct_answer': 687},
      {'block_file': 'block_7.xlsx', 'correct_answer': 677},
      {'block_file': 'block_8.xlsx', 'correct_answer': 685},
      {'block_file': 'block_9.xlsx', 'correct_answer': 858},
      {'block_file': 'block_10.xlsx', 'correct_answer': 678},
      {'block_file': 'block_11.xlsx', 'correct_answer': 866},
      {'block_file': 'block_12.xlsx', 'correct_answer': 576},
      {'block_file': 'block_13.xlsx', 'correct_answer': 866},
      {'block_file': 'block_14.xlsx', 'correct_answer': 697},
      {'block_file': 'block_15.xlsx', 'correct_answer': 856},
      {'block_file': 'block_16.xlsx', 'correct_answer': 668},
      {'block_file': 'block_17.xlsx', 'correct_answer': 966},
      {'block_file': 'block_18.xlsx', 'correct_answer': 697},
      {'block_file': 'block_19.xlsx', 'correct_answer': 857},
      {'block_file': 'block_20.xlsx', 'correct_answer': 778},
      {'block_file': 'block_21.xlsx', 'correct_answer': 867},
      {'block_file': 'block_22.xlsx', 'correct_answer': 676},
      {'block_file': 'block_23.xlsx', 'correct_answer': 767},
      {'block_file': 'block_24.xlsx', 'correct_answer': 678},
      {'block_file': 'block_25.xlsx', 'correct_answer': 796},
      {'block_file': 'block_practice_2.xlsx', 'correct_answer': 767},
      {'block_file': 'block_practice_3.xlsx', 'correct_answer': 669}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
    Routine fixation
    LoopInitiator loop_block loopType="TrialHandler"
      conditionsFile = $block_file
      loopType = sequential
      nReps = 1
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      Routine block
      Routine refresh
    LoopTerminator loop_block
    Routine answer_block
    Routine refresh
    Routine feedback_block
    Routine refresh
    Routine continue_check_block
    Routine refresh
  LoopTerminator loop_primary
  Routine goodbye
